PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = 186c experiment
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine presurvey_questions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please answer the following presurvey questions!
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = 186c experiment survey form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine training
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  Routine trial
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  Routine conclusion
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Flow
  Routine intro
  Routine presurvey_questions
  LoopInitiator training_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine training
  LoopTerminator training_loop
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trial_loop
  Routine conclusion
